PsychoPy2experiment version="2024.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = stroop
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine instruct
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    TextComponent instrText
      letterHeight = 0.05
      startVal [time (s)] = 0
      units = height
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      text:
        OK. Ready for the real thing?

        Remember, ignore the word itself; press:
        Left for red LETTERS
        Down for green LETTERS
        Right for blue LETTERS
        (Esc will quit)

        Press any key to continue
    KeyboardComponent ready
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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  Routine trial
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    TextComponent word
      color [set every repeat] = $letterColor
      letterHeight = 0.15
      startVal [time (s)] = 0.5
      text [set every repeat] = $text
      units = height
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    KeyboardComponent resp
      allowedKeys = "left","down","right"
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine thanks
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    TextComponent thanksText
      letterHeight = 0.05
      startVal [time (s)] = 0
      units = height
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      text:
        This is the end of the experiment.

        Thanks!
    CodeComponent code
      Code Type = JS
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      Begin JS Routine:
        // Disable downloading results to browser
        psychoJS._saveResults = 0;

        // Generate filename for results
        let filename = psychoJS._experiment._experimentName + '_' + psychoJS._experiment._datetime + '.csv';

        // Extract data object from experiment
        let dataObj = psychoJS._experiment._trialsData;

        // Convert data object to CSV
        let data = [Object.keys(dataObj[0])].concat(dataObj).map(it => {
            return Object.values(it).toString()
        }).join('\n')

        // Send data to OSF via DataPipe
        console.log('Saving data...');
        fetch('https://pipe.jspsych.org/api/data', {
            method: 'POST',
            headers: {
                'Content-Type': 'application/json',
                Accept: '*/*',
            },
            body: JSON.stringify({
                experimentID: 'hom4FPtkLgsD', // ⭑ UPDATE WITH YOUR DATAPIPE EXPERIMENT ID ⭑
                filename: filename,
                data: data,
            }),
        }).then(response => response.json()).then(data => {
            // Log response and force experiment end
            console.log(data);
            quitPsychoJS();
        })
Flow
  Routine instruct
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trialTypes.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'text': 'red', 'letterColor': 'red', 'corrAns': 'left', 'congruent': 1},
      {'text': 'red', 'letterColor': 'green', 'corrAns': 'down', 'congruent': 0},
      {'text': 'green', 'letterColor': 'green', 'corrAns': 'down', 'congruent': 1},
      {'text': 'green', 'letterColor': 'blue', 'corrAns': 'right', 'congruent': 0},
      {'text': 'blue', 'letterColor': 'blue', 'corrAns': 'right', 'congruent': 1},
      {'text': 'blue', 'letterColor': 'red', 'corrAns': 'left', 'congruent': 0}]
    Routine trial
  LoopTerminator trials
  Routine thanks
